i:So/Default/NumberOfHistoriesInRun = 1000

s:Ph/ListName = "MyList"

s:Ph/MyList/Type           = "Geant4_Modular"
sv:Ph/MyList/Modules       = 1 "Transportation_Only"
d:Ph/MyList/CutForGamma    = 0.04 mm
d:Ph/MyList/CutForElectron = 0.03 mm
d:Ph/MyList/CutForPositron = 0.02 mm
d:Ph/MyList/CutForProton   = 0.01 mm

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "Water"
d:Ge/Phantom/HLX      = 80.0 cm
d:Ge/Phantom/HLY      = 80.0 cm
d:Ge/Phantom/HLZ      = 20.0 cm
d:Ge/Phantom/TransX   = 0. cm
d:Ge/Phantom/TransY   = 0. cm
d:Ge/Phantom/TransZ   = -30. cm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0. deg
d:Ge/Phantom/RotZ     = 0. deg
s:Ge/Phantom/Color    = "blue"

s:Sc/EnergyDepAtPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDepAtPhantom/Quantity  = "DoseToWater"
s:Sc/EnergyDepAtPhantom/Component = "Phantom"
i:Sc/EnergyDepAtPhantom/XBins     = 2
