#--- Geometry
s:Ge/Box/Type     = "TsBox"
s:Ge/Box/Parent   = "World"
s:Ge/Box/Material = "G4_WATER"
d:Ge/Box/HLX      = 1. m
d:Ge/Box/HLY      = 1. m
d:Ge/Box/HLZ      = .4 m
d:Ge/Box/TransX   = 0. m
d:Ge/Box/TransY   = 0. m
d:Ge/Box/TransZ   = 0. m
d:Ge/Box/RotX     = 0. deg
d:Ge/Box/RotY     = 0. deg
d:Ge/Box/RotZ     = 0. deg


#--- Source
d:So/Default/BeamEnergy = 200. MeV
i:So/Default/NumberOfHistoriesInRun = 10


#--- Viewer
s:Gr/ViewA/Type        = "OpenGL"
i:Gr/ViewA/WindowSizeX = 400
i:Gr/ViewA/WindowSizeY = 400
i:Gr/ViewA/WindowPosX  = 0
i:Gr/ViewA/WindowPosY  = 0
s:Gr/ViewA/Projection  = "Orthogonal"
d:Gr/ViewA/Theta       = 45. deg
d:Gr/ViewA/Phi         = 45. deg
