includeFile = GlobalParameters.txt

#--- Source
s:So/Default/Type                   = "Beam"
s:So/Default/Component              = "BeamPosition"
s:So/Default/BeamParticle           = "proton"
d:So/Default/BeamEnergy             = 150. MeV
u:So/Default/BeamEnergySpread       = 0.
s:So/Default/BeamShape              = "Ellipse"
s:So/Default/BeamXYDistribution     = "Flat"
d:So/Default/BeamHWX                = 3. cm
d:So/Default/BeamHWY                = 3. cm
d:So/Default/BeamAngularSpreadX     = 0. rad
d:So/Default/BeamAngularSpreadY     = 0. rad
i:So/Default/NumberOfHistoriesInRun = 100


#--- Target (upper surface at isocenter)
s:Ge/Phantom/Type            = "TsBox"
s:Ge/Phantom/Material        = "Water"
s:Ge/Phantom/Parent          = "IsoCoordination"
d:Ge/Phantom/HLX             = 25. cm
d:Ge/Phantom/HLY             = 25. cm
d:Ge/Phantom/HLZ             = 0.5 cm
d:Ge/Phantom/TransX          = 0. m
d:Ge/Phantom/TransY          = 0. m
d:Ge/Phantom/TransZ          = -1.0 * Ge/Phantom/HLZ cm
d:Ge/Phantom/RotX            = 180. deg   # rotate so +z means increasing depth
d:Ge/Phantom/RotY            = 0. deg
d:Ge/Phantom/RotZ            = 0. deg
s:Sc/Phantom/UpstreamSurface = "Phantom/ZMinusSurface"


#--- Scoring
s:Sc/PHSP/Quantity                  = "PhaseSpace"
s:Sc/PHSP/Surface                   = Sc/Phantom/UpstreamSurface
s:Sc/PHSP/OutputType                = "ASCII"
s:Sc/PHSP/OutputFile                = "iso_ascii"
s:Sc/PHSP/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/PHSP/KillAfterPhaseSpace       = "True"
