includeFile = Phasespace_02.txt

#--- Target box the ZPlus surface at Iso center
s:Sc/PHSP_ISO/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/PHSP_ISO/Quantity             = "PhaseSpace"
s:Sc/PHSP_ISO/OutputFile	     = "phsp02_iso_asc"
b:Sc/PHSP_ISO/OutputToConsole      = "True"
s:Sc/PHSP_ISO/Surface              = "Plane_ISO/ZPlusSurface"
s:Sc/PHSP_ISO/OutputType           = "ASCII"
i:Sc/PHSP_ISO/PhaseSpaceBufferSize = 1000
b:Sc/PHSP_ISO/IncludeRunID         = "True"
b:Sc/PHSP_ISO/IncludeEventID       = "True"
b:Sc/PHSP_ISO/IncludeTrackID       = "True"
b:Sc/PHSP_ISO/IncludeTime          = "True"
b:Sc/PHSP_ISO/IncludeSeed          = "True"
