includeFile = Scoring_01.txt

#--- Timeline
d:Tf/TimelineStart           = 0. s
d:Tf/TimelineEnd             = 5. s
i:Tf/NumberOfSequentialTimes = 5


#--- Source
d:So/Default/BeamEnergy            = Tf/BeamEnergy/Value MeV
s:Tf/BeamEnergy/Function           = "Linear MeV"
d:Tf/BeamEnergy/Rate               = 5. MeV/s
d:Tf/BeamEnergy/StartValue         = 150. MeV
d:Tf/BeamEnergy/RepetitionInterval = 10. s


#--- Scoring (Dose scorer inherited from Scoring_01.txt)
s:Sc/PHSP/Quantity                  = "PhaseSpace"
s:Sc/PHSP/Surface                   = Sc/Phantom/UpstreamSurface
s:Sc/PHSP/OutputType                = "ASCII"
s:Sc/PHSP/OutputFile                = "iso_ascii"
s:Sc/PHSP/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/PHSP/KillAfterPhaseSpace       = "False"
