includeFile = GlobalParameters.txt

i:Ts/Seed = 5


#--- Primary beam: 100 particles as a known source
s:So/Default/Type                  = "PhaseSpace"
s:So/Default/PhaseSpaceFileName    = "phase_spaces/cylinder_top"
i:So/Default/PhaseSpaceMultipleUse = 1
s:So/Default/Component     = "World"

#--- Target box the ZPlus surface at Iso center
s:Ge/ScoringCylinder/Type      = "TsCylinder"
s:Ge/ScoringCylinder/Material  = "Water"
s:Ge/ScoringCylinder/Parent    = "IsoCoordination"
d:Ge/ScoringCylinder/RMin      = 0.0 cm
d:Ge/ScoringCylinder/RMax      = 3.0 cm
d:Ge/ScoringCylinder/SPhi      = 0.0 deg
d:Ge/ScoringCylinder/DPhi      = 360.0 deg
d:Ge/ScoringCylinder/HL        = 10.0 mm
d:Ge/ScoringCylinder/TransZ    = 0.0 mm
d:Ge/ScoringCylinder/TransY    = 0. m
d:Ge/ScoringCylinder/TransX    = 0. m
d:Ge/ScoringCylinder/RotX      = 0. deg
d:Ge/ScoringCylinder/RotY      = 0. deg
d:Ge/ScoringCylinder/RotZ      = 0. deg

#--- All topas scoreres are defined and tested here.
#except: dosetowaterbinned

s:Sc/Dose2MediumInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose2MediumInPlane/Quantity         = "DoseToMedium"
s:Sc/Dose2MediumInPlane/OutputFile		 = "tscylinder01_dose2medium"
b:Sc/Dose2MediumInPlane/OutputToConsole  = "True"
s:Sc/Dose2MediumInPlane/Component        = "ScoringCylinder"

s:Sc/Dose2WaterInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose2WaterInPlane/Quantity         = "DoseToWater"
s:Sc/Dose2WaterInPlane/OutputFile		= "tscylinder01_dose2water"
b:Sc/Dose2WaterInPlane/OutputToConsole  = "True"
s:Sc/Dose2WaterInPlane/Component        = "ScoringCylinder"

#The following a little tiny volume is needed to score DoseToMaterial.
#placed off the beam axis
s:Ge/BoxForDose2Material/Type      = "G4Box"
s:Ge/BoxForDose2Material/Material  = "Lead"
s:Ge/BoxForDose2Material/Parent    = "IsoCoordination"
d:Ge/BoxForDose2Material/HLX       = 1.0 mm
d:Ge/BoxForDose2Material/HLY       = 1.0 mm
d:Ge/BoxForDose2Material/HLZ       = 0.5 mm
d:Ge/BoxForDose2Material/TransZ    = -1.0 * Ge/BoxForDose2Material/HLZ cm
d:Ge/BoxForDose2Material/TransY    = -10. cm
d:Ge/BoxForDose2Material/TransX    = -10. cm
d:Ge/BoxForDose2Material/RotX      = 0. deg
d:Ge/BoxForDose2Material/RotY      = 0. deg
d:Ge/BoxForDose2Material/RotZ      = 0. deg

s:Sc/Dose2MaterialInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose2MaterialInPlane/Quantity         = "DoseToMaterial"
s:Sc/Dose2MaterialInPlane/Material         = "Lead"
s:Sc/Dose2MaterialInPlane/OutputFile	   = "tscylinder01_dose2material"
b:Sc/Dose2MaterialInPlane/OutputToConsole  = "True"
s:Sc/Dose2MaterialInPlane/Component        = "ScoringCylinder"

s:Sc/EnergyDepositInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDepositInPlane/Quantity         = "EnergyDeposit"
s:Sc/EnergyDepositInPlane/OutputFile	   = "tscylinder01_edep"
b:Sc/EnergyDepositInPlane/OutputToConsole  = "True"
s:Sc/EnergyDepositInPlane/Component        = "ScoringCylinder"

s:Sc/ChargeAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/ChargeAtPlane/Quantity          = "Charge"
s:Sc/ChargeAtPlane/OutputFile		 = "tscylinder01_charge"
b:Sc/ChargeAtPlane/OutputToConsole   = "True"
s:Sc/ChargeAtPlane/Component         = "ScoringCylinder"

s:Sc/EChargeAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EChargeAtPlane/Quantity         = "EffectiveCharge"
s:Sc/EChargeAtPlane/OutputFile		 = "tscylinder01_effcharge"
b:Sc/EChargeAtPlane/OutputToConsole  = "True"
s:Sc/EChargeAtPlane/Component        = "ScoringCylinder"

s:Sc/KineticEnergyAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/KineticEnergyAtPlane/Quantity        = "kineticenergyatsurface"
s:Sc/KineticEnergyAtPlane/OutputFile	  = "tscylinder01_kinetic"
b:Sc/KineticEnergyAtPlane/OutputToConsole = "True"
s:Sc/KineticEnergyAtPlane/Component       = "ScoringCylinder"

s:Sc/FluenceAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/FluenceAtPlane/Quantity           = "Fluence"
s:Sc/FluenceAtPlane/OutputFile		   = "tscylinder01_fluence"
b:Sc/FluenceAtPlane/OutputToConsole    = "True"
s:Sc/FluenceAtPlane/Component          = "ScoringCylinder"

s:Sc/EFluenceAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EFluenceAtPlane/Quantity          = "EnergyFluence"
s:Sc/EFluenceAtPlane/OutputFile		   = "tscylinder01_energyfluence"
b:Sc/EFluenceAtPlane/OutputToConsole   = "True"
s:Sc/EFluenceAtPlane/Component         = "ScoringCylinder"

s:Sc/StepCountsAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/StepCountsAtPlane/Quantity         = "stepcount"
s:Sc/StepCountsAtPlane/OutputFile	    = "tscylinder01_stepcount"
b:Sc/StepCountsAtPlane/OutputToConsole  = "True"
s:Sc/StepCountsAtPlane/Component        = "ScoringCylinder"

s:Sc/SurfaceCurrentAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SurfaceCurrentAtPlane/Quantity        = "surfacecurrent"
s:Sc/SurfaceCurrentAtPlane/OutputFile	   = "tscylinder01_surfacecurrent"
b:Sc/SurfaceCurrentAtPlane/OutputToConsole = "True"
s:Sc/SurfaceCurrentAtPlane/Surface         = "ScoringCylinder/ZPlusSurface"

s:Sc/SurfaceTrackCountAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SurfaceTrackCountAtPlane/Quantity        = "surfacetrackcount"
s:Sc/SurfaceTrackCountAtPlane/OutputFile	  = "tscylinder01_surfacetrackcount"
b:Sc/SurfaceTrackCountAtPlane/OutputToConsole = "True"
s:Sc/SurfaceTrackCountAtPlane/Surface         = "ScoringCylinder/ZPlusSurface"
