includeFile = GlobalParameters.txt

#Ts/PauseBeforeSequence = "True"
i:Ts/Seed = 5

#--- Primary beam: 100 particles as a known source
s:So/Default/Type                  = "PhaseSpace"
s:So/Default/PhaseSpaceFileName    = "phase_spaces/pixels_1x1_cylinder"
i:So/Default/PhaseSpaceMultipleUse = 1
b:So/Default/PhaseSpaceIgnoreXPos  = "TRUE"
b:So/Default/PhaseSpaceIgnoreYPos  = "false"
b:So/Default/PhaseSpaceIgnoreZPos  = "false"
b:So/Default/PhaseSpaceInvertXAxis = "false"
b:So/Default/PhaseSpaceInvertYAxis = "false"
b:So/Default/PhaseSpaceInvertZAxis = "false"

s:So/Default/Component     = "World"

d:Ge/BeamPosition/RotX     = 0. deg

#--- Target box the ZPlus surface at Iso center
s:Ge/Plane_ISO/Type      = "G4Tubs"
s:Ge/Plane_ISO/Material  = "Water"
s:Ge/Plane_ISO/Parent    = "IsoCoordination"
#RMin not Rmin
d:Ge/Plane_ISO/RMin      = 0.0 cm
d:Ge/Plane_ISO/RMax      = 3.0 cm
d:Ge/Plane_ISO/SPhi      = 0.0 deg
d:Ge/Plane_ISO/DPhi      = 360.0 deg
#HL = 1.0 for segment
d:Ge/Plane_ISO/HL        = 100.0 mm
d:Ge/Plane_ISO/TransZ    = 0.0 mm
d:Ge/Plane_ISO/TransY    = 0. m
d:Ge/Plane_ISO/TransX    = 0. m
d:Ge/Plane_ISO/RotX      = 0. deg
d:Ge/Plane_ISO/RotY      = 90. deg
d:Ge/Plane_ISO/RotZ      = 0. deg


#--- All topas scoreres are defined and tested here.
#except: dosetowaterbinned

s:Sc/Dose2MediumInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose2MediumInPlane/Quantity         = "DoseToMedium"
s:Sc/Dose2MediumInPlane/OutputFile		 = "tscylinder02_dose2medium"
b:Sc/Dose2MediumInPlane/OutputToConsole  = "True"
s:Sc/Dose2MediumInPlane/Component        = "Plane_ISO"

s:Sc/Dose2WaterInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose2WaterInPlane/Quantity         = "DoseToWater"
s:Sc/Dose2WaterInPlane/OutputFile		= "tscylinder02_dose2water"
b:Sc/Dose2WaterInPlane/OutputToConsole  = "True"
s:Sc/Dose2WaterInPlane/Component        = "Plane_ISO"

#The following a little tiny volume is needed to score DoseToMaterial.
#placed off the beam axis
s:Ge/BoxForDose2Material/Type      = "G4Box"
s:Ge/BoxForDose2Material/Material  = "Lead"
s:Ge/BoxForDose2Material/Parent    = "IsoCoordination"
d:Ge/BoxForDose2Material/HLX       = 1.0 mm
d:Ge/BoxForDose2Material/HLY       = 1.0 mm
d:Ge/BoxForDose2Material/HLZ       = 0.5 mm
d:Ge/BoxForDose2Material/TransZ    = -1.0 * Ge/BoxForDose2Material/HLZ cm
d:Ge/BoxForDose2Material/TransY    = -10. cm
d:Ge/BoxForDose2Material/TransX    = -10. cm
d:Ge/BoxForDose2Material/RotX      = 0. deg
d:Ge/BoxForDose2Material/RotY      = 0. deg
d:Ge/BoxForDose2Material/RotZ      = 0. deg

s:Sc/Dose2MaterialInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/Dose2MaterialInPlane/Quantity         = "DoseToMaterial"
s:Sc/Dose2MaterialInPlane/Material         = "Lead"
s:Sc/Dose2MaterialInPlane/OutputFile	= "tscylinder02_dose2material"
b:Sc/Dose2MaterialInPlane/OutputToConsole  = "True"
s:Sc/Dose2MaterialInPlane/Component        = "Plane_ISO"

s:Sc/EnergyDepositInPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDepositInPlane/Quantity           = "EnergyDeposit"
s:Sc/EnergyDepositInPlane/OutputFile		 = "tscylinder02_edep"
b:Sc/EnergyDepositInPlane/OutputToConsole    = "True"
s:Sc/EnergyDepositInPlane/Component          = "Plane_ISO"

s:Sc/ChargeAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/ChargeAtPlane/Quantity          = "Charge"
s:Sc/ChargeAtPlane/OutputFile		 = "tscylinder02_charge"
b:Sc/ChargeAtPlane/OutputToConsole   = "True"
s:Sc/ChargeAtPlane/Component         = "Plane_ISO"

s:Sc/EChargeAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EChargeAtPlane/Quantity         = "EffectiveCharge"
s:Sc/EChargeAtPlane/OutputFile		 = "tscylinder02_effcharge"
b:Sc/EChargeAtPlane/OutputToConsole  = "True"
s:Sc/EChargeAtPlane/Component        = "Plane_ISO"

s:Sc/KineticEnergyAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/KineticEnergyAtPlane/Quantity        = "kineticenergyatsurface"
s:Sc/KineticEnergyAtPlane/OutputFile	  = "tscylinder02_kinetic"
b:Sc/KineticEnergyAtPlane/OutputToConsole = "True"
s:Sc/KineticEnergyAtPlane/Component       = "Plane_ISO"

s:Sc/FluenceAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/FluenceAtPlane/Quantity           = "Fluence"
s:Sc/FluenceAtPlane/OutputFile		   = "tscylinder02_fluence"
b:Sc/FluenceAtPlane/OutputToConsole    = "True"
s:Sc/FluenceAtPlane/Component          = "Plane_ISO"

s:Sc/EFluenceAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EFluenceAtPlane/Quantity          = "EnergyFluence"
s:Sc/EFluenceAtPlane/OutputFile		   = "tscylinder02_energyfluence"
b:Sc/EFluenceAtPlane/OutputToConsole   = "True"
s:Sc/EFluenceAtPlane/Component         = "Plane_ISO"

s:Sc/StepCountsAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/StepCountsAtPlane/Quantity         = "stepcount"
s:Sc/StepCountsAtPlane/OutputFile		= "tscylinder02_stepcount"
b:Sc/StepCountsAtPlane/OutputToConsole  = "True"
s:Sc/StepCountsAtPlane/Component        = "Plane_ISO"

s:Sc/SurfaceCurrentAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SurfaceCurrentAtPlane/Quantity        = "surfacecurrent"
s:Sc/SurfaceCurrentAtPlane/OutputFile	= "tscylinder02_surfacecurrent"
b:Sc/SurfaceCurrentAtPlane/OutputToConsole = "True"
s:Sc/SurfaceCurrentAtPlane/Surface         = "Plane_ISO/ZPlusSurface"

s:Sc/SurfaceTrackCountAtPlane/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/SurfaceTrackCountAtPlane/Quantity        = "surfacetrackcount"
s:Sc/SurfaceTrackCountAtPlane/OutputFile	  = "tscylinder02_surfacetrackcount"
b:Sc/SurfaceTrackCountAtPlane/OutputToConsole = "True"
s:Sc/SurfaceTrackCountAtPlane/Surface         = "Plane_ISO/ZPlusSurface"
